PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Fam
  keyboardBackend = ioHub
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Routines
  Routine WelcomeFam
    TextComponent textWelcomeFam
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the experiment!
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine InstructionsFam
    TextboxComponent textboxInstrFam
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will see pictures on the screen and will have to name them.

        The pictures will appear one at a time and will stay on screen for a few seconds.

        When a picture appears, you will have to say its name out loud.

        After each picture, you will see its name written below it.

        Please try and remember to use this name for the rest of the experiment.


        Press SPACE to start.
    KeyboardComponent keyInstrFam
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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  Routine famPhase
    PolygonComponent polygonWhiteFam
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    ImageComponent imageFam
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    TextComponent textFam
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 2.5
      text [set every frame] = $correctAns
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    MicrophoneComponent micFam
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    CodeComponent codeFam
      Code Type = Py
      Each Frame:
        if t > 6:
            continueRoutine = False
    CodeComponent codeSaveFam
      Code Type = Py
      Before Experiment:
        count = 0
      Begin Routine:
        count = count + 1
      End Routine:
        clipFilename = 'recording_mic_%s.wav' % tag
        #"recording_" + str(count) + ".wav"
        micFam.lastClip.save(os.path.join(micFamRecFolder, clipFilename))

        '''
        # save mic recordings
        for tag in mic.clips:
            for i, clip in enumerate(mic.clips[tag]):
                clipFilename = 'recording_mic_%s.wav' % tag
                # if there's more than 1 clip with this tag, append a counter for all beyond the first
                if i > 0:
                    clipFilename += '_%s' % i
                clip.save(os.path.join(micRecFolder, clipFilename))

        '''
  Routine EndFam
    TextboxComponent textboxEndFam
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Congratulations!

        You finished the first part and you can now move to the second part of the experiment!


        Press SPACE to continue.
    KeyboardComponent keyEndFam
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeFam
  Routine blank500
  Routine InstructionsFam
  Routine blank500
  LoopInitiator famTrials loopType="TrialHandler"
    conditionsFile = repswitch_fam.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1_Fam/PICTURE_128.png', 'correctAns': 'muñeca'},
      {'image': 'REPSWITCH1_Fam/PICTURE_135.png', 'correctAns': 'traje'},
      {'image': 'REPSWITCH1_Fam/PICTURE_142.png', 'correctAns': 'vaso'},
      {'image': 'REPSWITCH1_Fam/PICTURE_152.png', 'correctAns': 'caracol'},
      {'image': 'REPSWITCH1_Fam/PICTURE_16.png', 'correctAns': 'cazador'},
      {'image': 'REPSWITCH1_Fam/PICTURE_169.png', 'correctAns': 'espalda'},
      {'image': 'REPSWITCH1_Fam/PICTURE_175.png', 'correctAns': 'pintor'},
      {'image': 'REPSWITCH1_Fam/PICTURE_178.png', 'correctAns': 'puente'},
      {'image': 'REPSWITCH1_Fam/PICTURE_19.png', 'correctAns': 'pavo'},
      {'image': 'REPSWITCH1_Fam/PICTURE_199.png', 'correctAns': 'falda'},
      {'image': 'REPSWITCH1_Fam/PICTURE_235.png', 'correctAns': 'aguja'},
      {'image': 'REPSWITCH1_Fam/PICTURE_242.png', 'correctAns': 'cartero'},
      {'image': 'REPSWITCH1_Fam/PICTURE_264.png', 'correctAns': 'mano'},
      {'image': 'REPSWITCH1_Fam/PICTURE_271.png', 'correctAns': 'conejo'},
      {'image': 'REPSWITCH1_Fam/PICTURE_30.png', 'correctAns': 'granja'},
      {'image': 'REPSWITCH1_Fam/PICTURE_319.png', 'correctAns': 'vaca'},
      {'image': 'REPSWITCH1_Fam/PICTURE_320.png', 'correctAns': 'iglesia'},
      {'image': 'REPSWITCH1_Fam/PICTURE_338.png', 'correctAns': 'regalo'},
      {'image': 'REPSWITCH1_Fam/PICTURE_35.png', 'correctAns': 'oreja'},
      {'image': 'REPSWITCH1_Fam/PICTURE_381.png', 'correctAns': 'fresa'},
      {'image': 'REPSWITCH1_Fam/PICTURE_446.png', 'correctAns': 'cerdo'},
      {'image': 'REPSWITCH1_Fam/PICTURE_464.png', 'correctAns': 'goma'}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
    Routine ITI
    Routine famPhase
    Routine blank500
  LoopTerminator famTrials
  Routine blank500
  Routine EndFam
