PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = REPSWITCH1_Practice1_version1
  keyboardBackend = ioHub
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Routines
  Routine General_Instr_1
    TextboxComponent textboxInstr1
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.25)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        En este experimento verás imágenes en la pantalla y tendrás que nombrarlas.

        Tendrás que nombrar cada imagen diciendo su nombre en voz alta o escribiéndolo.

        Un rectángulo de color alrededor de cada imagen te indicará si tienes que decirla en voz alta o teclearla.
    TextboxComponent textboxInstr1_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.03)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Si el rectángulo es
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    TextboxComponent textboxInstr1_3
      alignment = center-left
      bold = True
      color = -1.0000, -1.0000, 0.0902
      editable = False
      letterHeight = 0.03
      pos = (0.255, 0.03)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = azul,
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    TextboxComponent textboxInstr1_4
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.33, 0.03)
      size = (None, None)
      startVal [time (s)] = 0.0
      text =  tendrás que  
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    TextboxComponent textboxInstr1_5
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.51, 0.03)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = escribirlo con el teclado.
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    TextboxComponent textboxInstr1_6
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0,-0.03)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Si el rectángulo es 
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    TextboxComponent textboxInstr1_7
      alignment = center-left
      bold = True
      color = 1.0000, 0.6863, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.255, -0.03)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = amarillo,
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    TextboxComponent textboxInstr1_8
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.39, -0.03)
      size = (None, None)
      startVal [time (s)] = 0.0
      text =  tendrás que 
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    TextboxComponent textboxInstr1_9
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.57, -0.03)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = decirlo en voz alta. 
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    TextboxComponent textboxInstr1_10
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.27)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Deberás nombrar las imágenes lo más rápido y con la mayor precisión posible.

        Las imágenes solo permanecerán en la pantalla durante unos instantes.


        Pulsa la BARRA ESPACIADORA para continuar.
    KeyboardComponent keyInstr1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine General_Instr_2
    TextboxComponent textboxInstr2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Algunas instrucciones más.

        Cuando hables, asegúrate de decir una sola palabra, con voz clara.

        Intenta mantener las manos sobre el teclado durante toda la sesión.

        Y, por favor, ¡no hables mientras escribes!


        Pulsa la BARRA ESPACIADORA para continuar.
    KeyboardComponent keyInstr2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine General_Instr_3
    TextboxComponent textboxInstr3
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Practiquemos antes de empezar.

        Pulsa la BARRA ESPACIADORA para continuar.
    KeyboardComponent keyInstr3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructionsPractice
    TextboxComponent textboxInstrPractice
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Si el rectángulo es
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    TextboxComponent textboxInstrPractice_2
      alignment = center-left
      bold = True
      color = -1.0000, -1.0000, 0.0902
      editable = False
      letterHeight = 0.03
      pos = (0.255, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = azul,
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    TextboxComponent textboxInstrPractice_3
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.33, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text =  deberás 
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    TextboxComponent textboxInstrPractice_4
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.46, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = teclear
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    TextboxComponent textboxInstrPractice_5
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.575, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = el nombre de la imagen. 
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    TextboxComponent textboxInstrPractice_6
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.15)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = La palabra
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    TextboxComponent textboxInstrPractice_7
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.155, 0.15)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = TECLEA
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    TextboxComponent textboxInstrPractice_8
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.27, 0.15)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = aparecerá encima de la imagen.
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    TextboxComponent textboxInstrPractice_9
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.05)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Si el rectángulo es 
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    TextboxComponent textboxInstrPractice_10
      alignment = center-left
      bold = True
      color = 1.0000, 0.6863, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.255, 0.05)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = amarillo,
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    TextboxComponent textboxInstrPractice_11
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.39, 0.05)
      size = (None, None)
      startVal [time (s)] = 0.0
      text =  tendrás que 
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    TextboxComponent textboxInstrPractice_12
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.57, 0.05)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = decir en voz alta 
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    TextboxComponent textboxInstrPractice_13
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.82, 0.05)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = el nombre de la imagen. 
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    TextboxComponent textboxInstrPractice_14
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
      text = La palabra
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    TextboxComponent textboxInstrPractice_15
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.15, 0)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = HABLA
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    TextboxComponent textboxInstrPractice_16
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.26, 0)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = aparecerá encima de la imagen. 
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    TextboxComponent textboxInstrPractice_17
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Pulsa la BARRA ESPACIADORA para empezar.
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    KeyboardComponent keyInstrPractice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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  Routine practiceTrial
    PolygonComponent polygonCol
      fillColor [set every repeat] = $frameColor
      lineColor [set every repeat] = $frameColor
      shape = rectangle
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonWh
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textCue
      color [set every repeat] = $frameColor
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respModal
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    ImageComponent imagePractice
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonText
      fillColor = 0.9216, 0.9216, 0.9216
      lineColor = 0.9216, 0.9216, 0.9216
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textPractice
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respDisplay
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    KeyboardComponent keyPractice
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','ñ','o','p','q','r','s','t','u','v','w','x','y','z','backspace'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    CodeComponent codePractice
      Code Type = Py
      Begin Routine:
        respDisplay = ""


        #key logger defaults
        last_len = 0
        key_list = []

        polygonText.opacity = 0
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyPractice.keys) > last_len):
            #increment the key logger length
            last_len = len(keyPractice.keys)

            #grab the last key added to the keys list
            key_list.append(keyPractice.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            #elif("return" in key_list):
                #remove the enter key
                #key_list.pop()

                #and end the trial if we have at least 2 digits
                #if(len(key_list) >= 2):
                    #continueRoutine = False


            #now loop through and remove any extra characters that may exist
            #while(len(key_list) > maxDigits):
                #key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)

        # check if the participant has started typing for the box to appear behind the sentence
        if len(key_list) > 0:
            polygonText.opacity = 1
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    MicrophoneComponent micPractice1v1
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      syncScreenRefresh = True
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    CodeComponent codeMicPractice
      Code Type = Py
      Each Frame:
        if t > 3:
            continueRoutine = False
    CodeComponent codeSavePractice
      Code Type = Py
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      Before Experiment:
        import pandas as pd

        count = 0
      Begin Experiment:
        # Read the excel file and store it in a pandas DataFrame
        data_file = "repswitch_practice1_version1.xlsx"
        df = pd.read_excel(data_file)

        # Get the participant number from the experiment info dialog
        participant_number = expInfo['participant']
      Begin Routine:
        count = count + 1

        #Retrieve the value of 'correctAns' for the current trial
        correctAns = df.loc[count - 1, 'correctAns']

        #Retrieve the value of 'respModal' for the current trial
        respModal = df.loc[count - 1, 'respModal']
      End Routine:
        clipFilename = f"recording_Practice1v1_p{participant_number}_tr{str(count)}_{respModal}_{correctAns}_%s.wav" % tag
        #"recording_" + str(count) + ".wav"
        micPractice1v1.lastClip.save(os.path.join(micPractice1v1RecFolder, clipFilename))
  Routine EndPractice
    TextboxComponent textboxEndPracrice
      alignment = center-left
      bold = False
      color = 1.0000, 1.0000, 1.0000
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        ¡Genial!


        Pulsa la BARRA ESPACIADORA para continuar.
    KeyboardComponent keyEndPractice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blankLoop
    TextComponent textBlankLoop
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine blank500_2
    TextComponent textBlank2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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Flow
  Routine General_Instr_1
  Routine General_Instr_2
  Routine General_Instr_3
  Routine InstructionsPractice
  Routine blank500
  LoopInitiator trialsPractice loopType="TrialHandler"
    conditionsFile = repswitch_practice1_version1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1_Practice/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'TECLEA', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_599.png', 'correctAns': 'nube', 'respModal': 'HABLA', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_570.png', 'correctAns': 'toro', 'respModal': 'TECLEA', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_570.png', 'correctAns': 'toro', 'respModal': 'TECLEA', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_733.png', 'correctAns': 'gafas', 'respModal': 'HABLA', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_614.png', 'correctAns': 'reina', 'respModal': 'TECLEA', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'HABLA', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'TECLEA', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_599.png', 'correctAns': 'nube', 'respModal': 'HABLA', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'TECLEA', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'HABLA', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'HABLA', 'frameColor': 'gold'}]
    Routine ITI
    Routine practiceTrial
    Routine blankLoop
  LoopTerminator trialsPractice
  Routine blank500_2
  Routine EndPractice
