PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = REPSWITCH1_Practice2_version1
  keyboardBackend = ioHub
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Routines
  Routine InstructionsPractice_2
    TextboxComponent textboxInstrPractice_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        ¡Vamos a practicar un poco más ante de empezar!

        Recuerda:
    TextboxComponent textboxInstrPractice_2_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.18)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Si el rectángulo es 
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    TextboxComponent textboxInstrPractice_2_3
      alignment = center-left
      bold = True
      color = -1.0000, -1.0000, 0.0902
      editable = False
      letterHeight = 0.03
      pos = (0.255, 0.18)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = azul,
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    TextboxComponent textboxInstrPractice_2_4
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.33, 0.18)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = deberás 
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    TextboxComponent textboxInstrPractice_2_5
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.45, 0.18)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = teclear
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    TextboxComponent textboxInstrPractice_2_6
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.56, 0.18)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = el nombre de la imagen.  
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    TextboxComponent textboxInstrPractice_2_7
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Si el rectángulo es 
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    TextboxComponent textboxInstrPractice_2_8
      alignment = center-left
      bold = True
      color = 1.0000, 0.6863, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.255, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = amarillo,
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    TextboxComponent textboxInstrPractice_2_9
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.39, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = deberás 
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    TextboxComponent textboxInstrPractice_2_10
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.51, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = repetir en voz alta 
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    TextboxComponent textboxInstrPractice_2_11
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.79, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = el nombre de la imagen.  
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    TextboxComponent textboxInstrPractice_2_12
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        En esta ocasión, no verás las palabras TECLEA o HABLA y solo deberás utilizar los colores.


        Pulsa la BARRA ESPACIADORA para continuar.
    KeyboardComponent keyInstrPractice_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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  Routine practiceTrial_2
    PolygonComponent polygonCol_2
      fillColor [set every repeat] = $frameColor
      lineColor [set every repeat] = $frameColor
      shape = rectangle
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonWh_2
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imagePractice_2
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonText_2
      fillColor = 0.9216, 0.9216, 0.9216
      lineColor = 0.9216, 0.9216, 0.9216
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textPractice_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respDisplay
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    KeyboardComponent keyPractice_2
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','ñ','o','p','q','r','s','t','u','v','w','x','y','z','backspace'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    CodeComponent codePractice_2
      Code Type = Py
      Begin Routine:
        respDisplay = ""


        #key logger defaults
        last_len = 0
        key_list = []

        polygonText_2.opacity = 0
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyPractice_2.keys) > last_len):
            #increment the key logger length
            last_len = len(keyPractice_2.keys)

            #grab the last key added to the keys list
            key_list.append(keyPractice_2.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            #elif("return" in key_list):
                #remove the enter key
                #key_list.pop()

                #and end the trial if we have at least 2 digits
                #if(len(key_list) >= 2):
                    #continueRoutine = False


            #now loop through and remove any extra characters that may exist
            #while(len(key_list) > maxDigits):
                #key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)

        # check if the participant has started typing for the box to appear behind the sentence
        if len(key_list) > 0:
            polygonText_2.opacity = 1
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    MicrophoneComponent micPractice2v1
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      syncScreenRefresh = True
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    CodeComponent codeMicPractice2
      Code Type = Py
      Each Frame:
        if t > 3:
            continueRoutine = False
    CodeComponent codeSavePractice2
      Code Type = Py
      Before Experiment:
        import pandas as pd

        count = 0
      Begin Experiment:
        # Read the excel file and store it in a pandas DataFrame
        data_file = "repswitch_practice2_version1.xlsx"
        df = pd.read_excel(data_file)

        # Get the participant number from the experiment info dialog
        participant_number = expInfo['participant']
      Begin Routine:
        count = count + 1

        #Retrieve the value of 'correctAns' for the current trial
        correctAns = df.loc[count - 1, 'correctAns']

        #Retrieve the value of 'respModal' for the current trial
        respModal = df.loc[count - 1, 'respModal']
      End Routine:
        clipFilename = f"recording_Practice2v1_p{participant_number}_tr{str(count)}_{respModal}_{correctAns}_%s.wav" % tag
        #"recording_" + str(count) + ".wav"
        micPractice2v1.lastClip.save(os.path.join(micPractice2v1RecFolder, clipFilename))
  Routine EndPractice_2
    TextboxComponent textboxEndPractice_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        ¡Genial!


        Pulsa la BARRA ESPACIADORA para continuar.
    KeyboardComponent keyEndPractice_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blankLoop
    TextComponent textBlankLoop
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine blank500_2
    TextComponent textBlank2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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Flow
  Routine InstructionsPractice_2
  Routine blank500
  LoopInitiator trialsPractice_2 loopType="TrialHandler"
    conditionsFile = repswitch_practice2_version1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1_Practice/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'SPEAK', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'TYPE', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_599.png', 'correctAns': 'nube', 'respModal': 'SPEAK', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_733.png', 'correctAns': 'gafas', 'respModal': 'TYPE', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_614.png', 'correctAns': 'reina', 'respModal': 'TYPE', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'TYPE', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'SPEAK', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_570.png', 'correctAns': 'toro', 'respModal': 'TYPE', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'SPEAK', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_733.png', 'correctAns': 'gafas', 'respModal': 'SPEAK', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_733.png', 'correctAns': 'gafas', 'respModal': 'TYPE', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_614.png', 'correctAns': 'reina', 'respModal': 'SPEAK', 'frameColor': 'gold'}]
    Routine ITI
    Routine practiceTrial_2
    Routine blankLoop
  LoopTerminator trialsPractice_2
  Routine blank500_2
  Routine EndPractice_2
