PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = REPSWITCH1_Practice_2
  keyboardBackend = ioHub
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Routines
  Routine WelcomePractice_2
    TextComponent textWelcomePractice_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the third part of the experiment!
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine InstructionsPractice_2
    TextComponent textInstrPractice_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This is a practice session!
        You will see images on the screen, one at a time, and you will have to name what you see in each image.  You will have to name either by speaking or by typing.

        A blue or yellow rectangle will be placed behind every image to indicate whether you need to speak or type.

        If the rectangle is blue, you will need to type the name of what you see on the image. If the rectangle is yellow, you will have to speak.

        You should name the images correctly and as quickly as possible. The images will stay on the screen for a short time.

        It is important that when you type you avoid looking at your hands as much as possible!

        You should also keep your hands above the keyboard during the whole practice session!

        Please, try not to speak while typing!


        Press SPACE to begin!
    KeyboardComponent keyInstrPractice_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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  Routine practiceTrial_2
    PolygonComponent polygonCol_2
      fillColor [set every repeat] = $frameColor
      lineColor [set every repeat] = $frameColor
      shape = rectangle
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonWh_2
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imagePractice_2
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonText_2
      fillColor = 0.9216, 0.9216, 0.9216
      lineColor = 0.9216, 0.9216, 0.9216
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textPractice_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respDisplay
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    KeyboardComponent keyPractice_2
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','ñ','o','p','q','r','s','t','u','v','w','x','y','z','backspace'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    CodeComponent codePractice_2
      Code Type = Py
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      Begin Routine:
        respDisplay = ""


        #key logger defaults
        last_len = 0
        key_list = []

        polygonText_2.opacity = 0
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyPractice_2.keys) > last_len):
            #increment the key logger length
            last_len = len(keyPractice_2.keys)

            #grab the last key added to the keys list
            key_list.append(keyPractice_2.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            #elif("return" in key_list):
                #remove the enter key
                #key_list.pop()

                #and end the trial if we have at least 2 digits
                #if(len(key_list) >= 2):
                    #continueRoutine = False


            #now loop through and remove any extra characters that may exist
            #while(len(key_list) > maxDigits):
                #key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)

        # check if the participant has started typing for the box to appear behind the sentence
        if len(key_list) > 0:
            polygonText_2.opacity = 1
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    MicrophoneComponent micPractice_2
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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  Routine EndPractice_2
    TextComponent textEndPractice_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Great!

        You finished the third part of the experiment!

        You can now move to the fourth and last part of this experiment!

        Press SPACE to end this part.
Flow
  Routine WelcomePractice_2
  Routine blank500
  Routine InstructionsPractice_2
  Routine blank500
  LoopInitiator trialsPractice_2 loopType="TrialHandler"
    conditionsFile = repswitch_practice_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1_Practice/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'SPEAK', 'frameColor': 'yellow'},
      {'image': 'REPSWITCH1_Practice/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'TYPE', 'frameColor': 'indigo'},
      {'image': 'REPSWITCH1_Practice/PICTURE_599.png', 'correctAns': 'nube', 'respModal': 'SPEAK', 'frameColor': 'yellow'},
      {'image': 'REPSWITCH1_Practice/PICTURE_733.png', 'correctAns': 'gafas', 'respModal': 'TYPE', 'frameColor': 'indigo'},
      {'image': 'REPSWITCH1_Practice/PICTURE_614.png', 'correctAns': 'reina', 'respModal': 'TYPE', 'frameColor': 'indigo'},
      {'image': 'REPSWITCH1_Practice/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'TYPE', 'frameColor': 'indigo'},
      {'image': 'REPSWITCH1_Practice/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'SPEAK', 'frameColor': 'yellow'},
      {'image': 'REPSWITCH1_Practice/PICTURE_570.png', 'correctAns': 'toro', 'respModal': 'TYPE', 'frameColor': 'indigo'},
      {'image': 'REPSWITCH1_Practice/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'SPEAK', 'frameColor': 'yellow'},
      {'image': 'REPSWITCH1_Practice/PICTURE_733.png', 'correctAns': 'gafas', 'respModal': 'SPEAK', 'frameColor': 'yellow'},
      {'image': 'REPSWITCH1_Practice/PICTURE_733.png', 'correctAns': 'gafas', 'respModal': 'TYPE', 'frameColor': 'indigo'},
      {'image': 'REPSWITCH1_Practice/PICTURE_614.png', 'correctAns': 'reina', 'respModal': 'SPEAK', 'frameColor': 'yellow'}]
    Routine ITI
    Routine practiceTrial_2
    Routine blank500
  LoopTerminator trialsPractice_2
  Routine blank500
  Routine EndPractice_2
