PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = REPSWITCH1_Practice_v2022.2.4
  keyboardBackend = ioHub
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Routines
  Routine General_Instr_1
    TextboxComponent textboxInstr1
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will see pictures on the screen and will have to name them.

        You will have to name each picture either by saying its name out loud or by typing it.

        A colored rectangle around each picture will tell you whether you have to speak or type for this picture.
    TextboxComponent textboxInstr1_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.03)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = If the rectangle is 
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    TextboxComponent textboxInstr1_3
      alignment = center-left
      bold = True
      color = -1.0000, -1.0000, 0.0902
      editable = False
      letterHeight = 0.03
      pos = (0.245, -0.03)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = blue,
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    TextboxComponent textboxInstr1_4
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.32, -0.03)
      size = (None, None)
      startVal [time (s)] = 0.0
      text =  you will need to 
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    TextboxComponent textboxInstr1_5
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.55, -0.03)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = type.
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    TextboxComponent textboxInstr1_6
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0,-0.08)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = If the rectangle is 
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    TextboxComponent textboxInstr1_7
      alignment = center-left
      bold = True
      color = 1.0000, 0.6863, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.245, -0.08)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = yellow,
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    TextboxComponent textboxInstr1_8
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.365, -0.08)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = you will have to 
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    TextboxComponent textboxInstr1_9
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.59, -0.08)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = speak.
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    TextboxComponent textboxInstr1_10
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.26)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        You should name the images as fast and accurately as possible.
        Pictures will only stay on the screen for a short time.


        Press SPACE to continue.
    KeyboardComponent keyInstr1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine General_Instr_2
    TextboxComponent textboxInstr2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        A few more instructions!

        When you speak, make sure you say only one word, in a clear voice.

        Try to keep your hands above the keyboard during the whole session.

        And please, don’t speak while typing!


        Press SPACE to continue.
    KeyboardComponent keyInstr2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine General_Instr_3
    TextboxComponent textboxInstr3
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Let’s practice before we begin!


        Press SPACE to continue.
    KeyboardComponent keyInstr3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructionsPractice
    TextboxComponent textboxInstrPractice
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = If the rectangle is 
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    TextboxComponent textboxInstrPractice_2
      alignment = center-left
      bold = True
      color = -1.0000, -1.0000, 0.0902
      editable = False
      letterHeight = 0.03
      pos = (0.245, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = blue,
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    TextboxComponent textboxInstrPractice_3
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.32, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text =  you will need to 
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    TextboxComponent textboxInstrPractice_4
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.55, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = type
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    TextboxComponent textboxInstrPractice_5
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.625, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = the name of the picture.
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    TextboxComponent textboxInstrPractice_6
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.15)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = The word 
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    TextboxComponent textboxInstrPractice_7
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.14, 0.15)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = TYPE
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    TextboxComponent textboxInstrPractice_8
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.22, 0.15)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = will appear above the picture.
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    TextboxComponent textboxInstrPractice_9
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.05)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = If the rectangle is 
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    TextboxComponent textboxInstrPractice_10
      alignment = center-left
      bold = True
      color = 1.0000, 0.6863, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.245, 0.05)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = yellow,
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    TextboxComponent textboxInstrPractice_11
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.365, 0.05)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = you will have to 
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    TextboxComponent textboxInstrPractice_12
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.59, 0.05)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = say out loud
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    TextboxComponent textboxInstrPractice_13
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.78, 0.05)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = the name of the picture.
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    TextboxComponent textboxInstrPractice_14
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
      text = The word
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    TextboxComponent textboxInstrPractice_15
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.14, 0)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = SPEAK
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    TextboxComponent textboxInstrPractice_16
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.24, 0)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = will appear above the picture. 
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    TextboxComponent textboxInstrPractice_17
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Press SPACE to begin!
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    KeyboardComponent keyInstrPractice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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  Routine practiceTrial
    PolygonComponent polygonCol
      fillColor [set every repeat] = $frameColor
      lineColor [set every repeat] = $frameColor
      shape = rectangle
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonWh
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textCue
      color [set every repeat] = $frameColor
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respModal
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    ImageComponent imagePractice
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonText
      fillColor = 0.9216, 0.9216, 0.9216
      lineColor = 0.9216, 0.9216, 0.9216
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textPractice
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respDisplay
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    KeyboardComponent keyPractice
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','ñ','o','p','q','r','s','t','u','v','w','x','y','z','backspace'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    CodeComponent codePractice
      Code Type = Py
      Begin Routine:
        respDisplay = ""


        #key logger defaults
        last_len = 0
        key_list = []

        polygonText.opacity = 0
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyPractice.keys) > last_len):
            #increment the key logger length
            last_len = len(keyPractice.keys)

            #grab the last key added to the keys list
            key_list.append(keyPractice.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            #elif("return" in key_list):
                #remove the enter key
                #key_list.pop()

                #and end the trial if we have at least 2 digits
                #if(len(key_list) >= 2):
                    #continueRoutine = False


            #now loop through and remove any extra characters that may exist
            #while(len(key_list) > maxDigits):
                #key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)

        # check if the participant has started typing for the box to appear behind the sentence
        if len(key_list) > 0:
            polygonText.opacity = 1
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    MicrophoneComponent micPractice
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    CodeComponent codeMicPractice
      Code Type = Py
      Each Frame:
        if t > 3:
            continueRoutine = False
    CodeComponent codeSavePractice
      Code Type = Py
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      Before Experiment:
        count = 0
      Begin Routine:
        count = count + 1
      End Routine:
        clipFilename = clipFilename = 'recording_mic_%s.wav' % tag
        #"recording_" + str(count) + ".wav"
        micPractice.lastClip.save(os.path.join(micPracticeRecFolder, clipFilename))

        '''
        # save mic recordings
        for tag in mic.clips:
            for i, clip in enumerate(mic.clips[tag]):
                clipFilename = 'recording_mic_%s.wav' % tag
                # if there's more than 1 clip with this tag, append a counter for all beyond the first
                if i > 0:
                    clipFilename += '_%s' % i
                clip.save(os.path.join(micRecFolder, clipFilename))

        '''
  Routine EndPractice
    TextboxComponent textboxEndPracrice
      alignment = center-left
      bold = False
      color = 1.0000, 0.6863, -1.0000
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Great!


        Press SPACE to continue.
    KeyboardComponent keyEndPractice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine General_Instr_1
  Routine General_Instr_2
  Routine General_Instr_3
  Routine InstructionsPractice
  Routine blank500
  LoopInitiator trialsPractice loopType="TrialHandler"
    conditionsFile = repswitch_practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1_Practice/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'TYPE', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_599.png', 'correctAns': 'nube', 'respModal': 'SPEAK', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_570.png', 'correctAns': 'toro', 'respModal': 'TYPE', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_570.png', 'correctAns': 'toro', 'respModal': 'TYPE', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_733.png', 'correctAns': 'gafas', 'respModal': 'SPEAK', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_614.png', 'correctAns': 'reina', 'respModal': 'TYPE', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'SPEAK', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'TYPE', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_599.png', 'correctAns': 'nube', 'respModal': 'SPEAK', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'TYPE', 'frameColor': 'darkblue'},
      {'image': 'REPSWITCH1_Practice/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'SPEAK', 'frameColor': 'gold'},
      {'image': 'REPSWITCH1_Practice/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'SPEAK', 'frameColor': 'gold'}]
    Routine ITI
    Routine practiceTrial
    Routine blank500
  LoopTerminator trialsPractice
  Routine blank500
  Routine EndPractice
