PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = REPSWITCH1_version2_list4
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygonColour
      fillColor [set every repeat] = $frameColor
      lineColor [set every repeat] = $frameColor
      shape = rectangle
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonWhite
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imageObject
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonType
      fillColor = 0.9216, 0.9216, 0.9216
      lineColor = 0.9216, 0.9216, 0.9216
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textInput
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respDisplay
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    KeyboardComponent keyResp
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','ñ','o','p','q','r','s','t','u','v','w','x','y','z','backspace'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    CodeComponent codeResp
      Code Type = Py
      Begin Routine:
        respDisplay = ""


        #key logger defaults
        last_len = 0
        key_list = []

        polygonType.opacity = 0
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp.keys) > last_len):
            #increment the key logger length
            last_len = len(keyResp.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            #elif("return" in key_list):
                #remove the enter key
                #key_list.pop()

                #and end the trial if we have at least 2 digits
                #if(len(key_list) >= 2):
                    #continueRoutine = False


            #now loop through and remove any extra characters that may exist
            #while(len(key_list) > maxDigits):
                #key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)

        # check if the participant has started typing for the box to appear behind the sentence
        if len(key_list) > 0:
            polygonType.opacity = 1
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    MicrophoneComponent micRespv2l4
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      syncScreenRefresh = True
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    CodeComponent codeMicRespv2l4
      Code Type = Py
      Each Frame:
        if t > 3:
            continueRoutine = False
    CodeComponent codeSaveResp
      Code Type = Py
      Before Experiment:
        import pandas as pd

        count = 0
      Begin Experiment:
        # Read the excel file and store it in a pandas DataFrame
        data_file = "repswitch_V2L4.xlsx" # the rest accordingly
        df = pd.read_excel(data_file)

        # Get the participant number from the experiment info dialog
        participant_number = expInfo['participant']
      Begin Routine:
        count = count + 1

        #Retrieve the value of 'correctAns' for the current trial
        correctAns = df.loc[count - 1, 'correctAns']

        #Retrieve the value of 'respModal' for the current trial
        respModal = df.loc[count - 1, 'respModal']
      End Routine:
        clipFilename = f"recording_V2L4_p{participant_number}_tr{str(count)}_{respModal}_{correctAns}_%s.wav" % tag
        #"recording_" + str(count) + ".wav"
        micRespv2l4.lastClip.save(os.path.join(micRespv2l4RecFolder, clipFilename))
  Routine Welcome
    TextComponent textWelcome
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = ¡Ahora vamos a comenzar con el experimento!
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine InstructionsMain2
    TextboxComponent textboxInstrMain2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Recuerda:
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    TextboxComponent textboxInstrMain2_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Si el rectángulo es
    TextboxComponent textboxInstrMain2_3
      alignment = center-left
      bold = True
      color = -1.0000, -1.0000, 0.0902
      editable = False
      letterHeight = 0.03
      pos = (0.255, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        azul,
    TextboxComponent textboxInstrMain2_4
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.33, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
         deberás
    TextboxComponent textboxInstrMain2_5
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.46, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        repetir en voz alta
    TextboxComponent textboxInstrMain2_6
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.74, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        el nombre de la imagen.
    TextboxComponent textboxInstrMain2_7
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Si el rectángulo es 
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    TextboxComponent textboxInstrMain2_8
      alignment = center-left
      bold = True
      color = 1.0000, 0.6863, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.255, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = amarillo,
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    TextboxComponent textboxInstrMain2_9
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.39, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text =  deberás 
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    TextboxComponent textboxInstrMain2_10
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.52, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = teclear 
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    TextboxComponent textboxInstrMain2_11
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.63, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = el nombre de la imagen.  
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    TextboxComponent textboxInstrMain2_12
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Pulsa la BARRA ESPACIADORA para continuar.
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    KeyboardComponent keyInstrMain2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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  Routine pause
    TextboxComponent textboxPause
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        ¡Ahora puedes tomarte un breve descanso!


        Pulsa la BARRA ESPACIADORA para continuar.
    KeyboardComponent keyPause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codePause
      Code Type = Py
      Begin Routine:
        if (trialsREPSWITCH.thisN + 1) % 51 != 0 or trialsREPSWITCH.thisN == trialsREPSWITCH.nTotal - 1:
            continueRoutine = False

            # (trialsREPSWITCH.thisN + 1) % 96 !=0 checks if the current trial number plus one is not divisible evenly
            # by 96. If TRUE, continueRoutine is set to FALSE to skip the break message.

            # trialsREPSWITCH.thisN == trialsREPSWITCH.nTotal - 1 checks if the current trial is the last trial of the
            # entire experiment; if TRUE, continueRoutine is set to FALSE to skip the break message.
            # So the break message will appear after every set of 96 trials except for the last set, where the break
            # message will be skipped.
  Routine Goodbye
    TextboxComponent textboxGoodbye
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        ¡Has finalizado el experimento!

        ¡Gracias por participar!
  Routine InstructionsMain1
    TextboxComponent textboxInstrMain1
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Algunos aspectos que debes recordar antes de empezar:

        Debes nombrar las imágenes
    TextboxComponent textboxInstrMain1_2
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.42, 0.2358)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        con la mayor rapidez y precisión posibles.
    TextboxComponent textboxInstrMain1_3
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Cuando hables, asegúrate de decir solo una palabra, con voz clara.

        Intenta mantener las manos sobre el teclado durante toda la sesión.

        Y, por favor, ¡no hables mientras escribes!

        Podrás hacer una breve pausa cada 5 minutos.



        Pulsa la BARRA ESPACIADORA para continuar.
    KeyboardComponent keyInstrMain
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blankLoop
    TextComponent textBlankLoop
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine blank500_2
    TextComponent textBlank2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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Flow
  Routine Welcome
  Routine InstructionsMain1
  Routine InstructionsMain2
  Routine blank500
  LoopInitiator trialsREPSWITCH loopType="TrialHandler"
    conditionsFile = repswitch_V2L4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1/PICTURE_8.png', 'correctAns': 'pierna', 'respModal': 'type', 'frameColor': 'gold', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F', 'set': 1, 'block': 4, 'list': 4, 'exp_version': 2, 'stimulus': 'Stim3_Set4', 'baseline': 0, 'baseline_condition': None, 'trial': 1, 'psychopy_trial': 0, 'Column1': 1},
      {'image': 'REPSWITCH1/PICTURE_498.png', 'correctAns': 'taza', 'respModal': 'speak', 'frameColor': 'darkblue', 'repSwitch': 'filler', 'sequence': 2, 'target': 'F', 'set': 1, 'block': 4, 'list': 4, 'exp_version': 2, 'stimulus': 'Stim4_Set4', 'baseline': 0, 'baseline_condition': None, 'trial': 2, 'psychopy_trial': 1, 'Column1': 2},
      {'image': 'REPSWITCH1/PICTURE_19.png', 'correctAns': 'pavo', 'respModal': 'speak', 'frameColor': 'darkblue', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT', 'set': 1, 'block': 4, 'list': 4, 'exp_version': 2, 'stimulus': 'Stim5_Set1', 'baseline': 1, 'baseline_condition': 'repeat', 'trial': 3, 'psychopy_trial': 2, 'Column1': 3},
      {'image': 'REPSWITCH1/PICTURE_19.png', 'correctAns': 'pavo', 'respModal': 'speak', 'frameColor': 'darkblue', 'repSwitch': 'repeat', 'sequence': 2, 'target': 'T', 'set': 1, 'block': 4, 'list': 4, 'exp_version': 2, 'stimulus': 'Stim5_Set1', 'baseline': 0, 'baseline_condition': None, 'trial': 4, 'psychopy_trial': 3, 'Column1': 4}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
    Routine ITI
    Routine trial
    Routine blankLoop
    Routine pause
  LoopTerminator trialsREPSWITCH
  Routine blank500_2
  Routine Goodbye
