PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = REPSWITCH_1
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygonColour
      fillColor [set every repeat] = $frameColour
      lineColor [set every repeat] = $frameColour
      shape = rectangle
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonWhite
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imageObject
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonType
      fillColor = 0.9216, 0.9216, 0.9216
      lineColor = 0.9216, 0.9216, 0.9216
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent textInput
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respDisplay
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    KeyboardComponent keyResp
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','ñ','o','p','q','r','s','t','u','v','w','x','y','z','backspace'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    CodeComponent codeResp
      Code Type = Py
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      Begin Routine:
        respDisplay = ""


        #key logger defaults
        last_len = 0
        key_list = []

        polygonType.opacity = 0
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp.keys) > last_len):
            #increment the key logger length
            last_len = len(keyResp.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            #elif("return" in key_list):
                #remove the enter key
                #key_list.pop()

                #and end the trial if we have at least 2 digits
                #if(len(key_list) >= 2):
                    #continueRoutine = False


            #now loop through and remove any extra characters that may exist
            #while(len(key_list) > maxDigits):
                #key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)

        # check if the participant has started typing for the box to appear behind the sentence
        if len(key_list) > 0:
            polygonType.opacity = 1
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    MicrophoneComponent micResp
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    CodeComponent codeMic
      Code Type = Py
      Begin Routine:
        from psychopy import sound, core, event

        # Set up the Microphone component
        micResp = sound.Microphone()

        # Create a list to store the participants' audio responses
        participant_responses = []

        # Start the Microphone recording
        micResp.start()

        # Run the experiment loop
        num_trials = 10  # Replace with the desired number of trials
        for trial in range(num_trials):
            # Present stimulus (picture, word, etc.) using Image component

            # Start recording the participant's response
            micResp.record(sec=None)

            # Wait for participant's response
            keys = event.waitKeys(keyList=['space'])

            # Stop recording the participant's response
            micResp.stop()

            # Get the recorded response
            response = micResp.getRecording()

            # Save the participant's response in audio file
            participant_responses.append(response)

        # Save each participant's response to a separate audio file
        for i, response in enumerate(participant_responses):
            output_file = 'response_{}.wav'.format(i)
            response.save(output_file)

        # Cleanup
        micResp.close()
  Routine Welcome
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = We are going to start the experiment!
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine Goodbye
    TextComponent textGoodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This is the end of the experiment!

        Thank you for participating!
  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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  Routine Debrief
    TextComponent textDebrief
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = In this experiment we are interested in the relationship between speaking and typing. More specifically, when we speak and type we need to activate the meaning of the word we wish to produce. We also need to activate the sounds and the letters that comprise this word. It has been shown that, both when we are speaking and when we are typing, we need both the word’s sounds and its  letters, but at different extent. With this experiment we want to examine if activating the orthography of a word is as important and takes places as strongly as activating the sounds of a word when we type.
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  Routine pause
    TextComponent textPause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Short break!

        Press SPACE to continue.
    KeyboardComponent keyPause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeBreak
      Code Type = Py
      Begin Routine:
        if trialsREPSWITCH.thisN == 0 or trialsREPSWITCH.thisN % 95 != 0:
            continueRoutine = False

            #checks if the value of trialsREPSWITCH.thisN is either 0 or not divisible evenly by 95
            #If either of these conditions is true, the continueRoutine variable is set to False,
            #indicating that some loop or routine should be skipped or terminated.
  Routine InstructionsMain1
    TextComponent textInstrMain1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        A few reminders before we start:

        You should name the images as fast and accurately as possible.
        When you speak, make sure you say only one word, in a clear voice.

        Try to keep your hands above the keyboard during the whole session. And please, don’t speak while typing!

        You will be able to take a short break every N  minutes.


        Press SPACE to continue
    KeyboardComponent keyInstrMain
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructionsMain2
    TextComponent textInstrMain2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Remember:

        If the rectangle is blue, you will need to type the name of the picture.
        If the rectangle is yellow, you will have to say out loud the name of the picture.


        Press SPACE to begin!
    KeyboardComponent keyInstrMain2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine blank500
  Routine InstructionsMain1
  Routine InstructionsMain2
  Routine blank500
  LoopInitiator trialsREPSWITCH loopType="TrialHandler"
    conditionsFile = repswitch.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1/PICTURE_128.png', 'correctAns': 'muñeca', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT', 'set': 1, 'stimulus': 'Stim1_Set1'},
      {'image': 'REPSWITCH1/PICTURE_128.png', 'correctAns': 'muñeca', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'repeat', 'sequence': 2, 'target': 'T', 'set': 1, 'stimulus': 'Stim1_Set1'},
      {'image': 'REPSWITCH1/PICTURE_135.png', 'correctAns': 'traje', 'respModal': 'type', 'frameColour': 'indigo', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F', 'set': 1, 'stimulus': 'Stim1_Set4'},
      {'image': 'REPSWITCH1/PICTURE_142.png', 'correctAns': 'vaso', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT', 'set': 1, 'stimulus': 'Stim2_Set1'},
      {'image': 'REPSWITCH1/PICTURE_142.png', 'correctAns': 'vaso', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'repeat', 'sequence': 2, 'target': 'T', 'set': 1, 'stimulus': 'Stim2_Set1'},
      {'image': 'REPSWITCH1/PICTURE_464.png', 'correctAns': 'goma', 'respModal': 'type', 'frameColour': 'indigo', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F', 'set': 1, 'stimulus': 'Stim2_Set4'},
      {'image': 'REPSWITCH1/PICTURE_152.png', 'correctAns': 'caracol', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT', 'set': 1, 'stimulus': 'Stim3_Set1'}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
    Routine ITI
    Routine trial
    Routine blank500
    Routine pause
  LoopTerminator trialsREPSWITCH
  Routine blank500
  Routine Goodbye
