PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = REPSWITCH_1
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent codeBreaks
      Code Type = Py
      Begin Experiment:
        trialCount=0
        breakTrials = [96, 192, 288]
      Begin Routine:
        trialCount = trialCount+1
      Each Frame:
        if trialCount not in breakTrials:
            continueRoutine = False
    PolygonComponent polygonColour
      fillColor [set every repeat] = $frameColour
      lineColor [set every repeat] = $frameColour
      shape = rectangle
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonWhite
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imageObject
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonType
      fillColor = 0.9216, 0.9216, 0.9216
      lineColor = 0.9216, 0.9216, 0.9216
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent textInput
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respDisplay
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    KeyboardComponent keyResp
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','ñ','o','p','q','r','s','t','u','v','w','x','y','z','backspace'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    CodeComponent codeResp
      Code Type = Py
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      Begin Routine:
        respDisplay = ""


        #key logger defaults
        last_len = 0
        key_list = []

        polygonType.opacity = 0
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp.keys) > last_len):
            #increment the key logger length
            last_len = len(keyResp.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            #elif("return" in key_list):
                #remove the enter key
                #key_list.pop()

                #and end the trial if we have at least 2 digits
                #if(len(key_list) >= 2):
                    #continueRoutine = False


            #now loop through and remove any extra characters that may exist
            #while(len(key_list) > maxDigits):
                #key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)

        # check if the participant has started typing for the box to appear behind the sentence
        if len(key_list) > 0:
            polygonType.opacity = 1
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
  Routine Welcome
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the experiment!
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine Goodbye
    TextComponent textGoodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you for participating!
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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  Routine practiceTrial
    PolygonComponent polygonCol
      fillColor [set every repeat] = $frameColor
      lineColor [set every repeat] = $frameColor
      shape = rectangle
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonWh
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imagePractice
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textCue
      color [set every repeat] = $frameColor
      letterHeight = 0.05
      pos = (0,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respModal
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    PolygonComponent polygonText
      fillColor = 0.9216, 0.9216, 0.9216
      lineColor = 0.9216, 0.9216, 0.9216
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textPractice
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respDisplay
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    KeyboardComponent keyPractice
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','ñ','o','p','q','r','s','t','u','v','w','x','y','z','backspace'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    CodeComponent codePractice
      Code Type = Py
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      Begin Routine:
        respDisplay = ""


        #key logger defaults
        last_len = 0
        key_list = []

        polygonType.opacity = 0
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp.keys) > last_len):
            #increment the key logger length
            last_len = len(keyResp.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            #elif("return" in key_list):
                #remove the enter key
                #key_list.pop()

                #and end the trial if we have at least 2 digits
                #if(len(key_list) >= 2):
                    #continueRoutine = False


            #now loop through and remove any extra characters that may exist
            #while(len(key_list) > maxDigits):
                #key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)

        # check if the participant has started typing for the box to appear behind the sentence
        if len(key_list) > 0:
            polygonType.opacity = 1
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
  Routine famPhase
    PolygonComponent polygonWhiteFam
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent imageFam
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent textFam
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 3
      text [set every frame] = $correctAns
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  Routine InstructionsFam
    TextComponent textInstrFam
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will see different images on the screen. You will see one image at a time. Each image will stay on screen for a few seconds. You will have to name what you see in each image. After each image, you will see the written word for what you saw in that image. The goal of this experiment is for you to name each image with the correct word.


        Press SPACE to begin!
    KeyboardComponent keyInstrFam
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructionsPractice
    TextComponent textInstrPractice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a practice session!
        Again, you will see some images on the screen, one at a time, and you will have to name what you see in each image.

        This time you will have to name either by speaking or by typing.

        A blue or yellow rectangle will be placed behind every image to indicate whether you need to speak or type.

        If the rectangle is blue, you will need to type the name of what you see on the image. If the rectangle is yellow, you will have to speak.

        You should name the images correctly and as quickly as possible. The images will stay on the screen for a short time.

        It is important that when you type you avoid looking at your hands as much as possible!

        You should also keep your hands above the keyboard during the whole practice session!

        Please, try not to speak while typing!


        Press SPACE to begin!
    KeyboardComponent keyInstrPractice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructionsMain
    TextComponent textInstrMain
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will see different images on the screen. The images will appear one at a time and will stay on the screen for a short time.

        You will have to name what you see in each image.
        You will be asked to name what you see either by speaking or by typing.

        A blue or yellow rectangle will be placed behind every image to indicate whether you need to speak or type.

        If the rectangle is blue, you will need to type the name of what you see on the image. If the rectangle is yellow, you will have to speak.

        You should name the images correctly and as quickly as possible. The images will stay on the screen for a short time.

        It is important that when you type you avoid looking at your hands as much as possible!

        You should also keep your hands above the keyboard during the whole practice session!

        Please, try not to speak while typing!

        You will be able to take a short break every N minutes.

        Press SPACE to begin!
    KeyboardComponent keyInstrMain
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Debrief
    TextComponent textDebrief
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = In this experiment we are interested in the relationship between speaking and typing. More specifically, when we speak and type we need to activate the meaning of the word we wish to produce. We also need to activate the sounds and the letters that comprise this word. It has been shown that, both when we are speaking and when we are typing, we need both the word’s sounds and its  letters, but at different extent. With this experiment we want to examine if activating the orthography of a word is as important and takes places as strongly as activating the sounds of a word when we type.
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Flow
  Routine Welcome
  Routine blank500
  Routine InstructionsFam
  Routine blank500
  LoopInitiator famTrials loopType="TrialHandler"
    conditionsFile = repswitch_fam.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1_Fam/PICTURE_128.png', 'correctAns': 'muñeca'},
      {'image': 'REPSWITCH1_Fam/PICTURE_142.png', 'correctAns': 'vaso'},
      {'image': 'REPSWITCH1_Fam/PICTURE_152.png', 'correctAns': 'caracol'},
      {'image': 'REPSWITCH1_Fam/PICTURE_16.png', 'correctAns': 'cazador'},
      {'image': 'REPSWITCH1_Fam/PICTURE_175.png', 'correctAns': 'pintor'},
      {'image': 'REPSWITCH1_Fam/PICTURE_178.png', 'correctAns': 'puente'},
      {'image': 'REPSWITCH1_Fam/PICTURE_19.png', 'correctAns': 'pavo'},
      {'image': 'REPSWITCH1_Fam/PICTURE_199.png', 'correctAns': 'falda'},
      {'image': 'REPSWITCH1_Fam/PICTURE_235.png', 'correctAns': 'aguja'},
      {'image': 'REPSWITCH1_Fam/PICTURE_242.png', 'correctAns': 'cartero'},
      {'image': 'REPSWITCH1_Fam/PICTURE_264.png', 'correctAns': 'mano'},
      {'image': 'REPSWITCH1_Fam/PICTURE_271.png', 'correctAns': 'conejo'},
      {'image': 'REPSWITCH1_Fam/PICTURE_30.png', 'correctAns': 'granja'},
      {'image': 'REPSWITCH1_Fam/PICTURE_319.png', 'correctAns': 'vaca'},
      {'image': 'REPSWITCH1_Fam/PICTURE_320.png', 'correctAns': 'iglesia'},
      {'image': 'REPSWITCH1_Fam/PICTURE_354.png', 'correctAns': 'cabra'},
      {'image': 'REPSWITCH1_Fam/PICTURE_377.png', 'correctAns': 'babero'},
      {'image': 'REPSWITCH1_Fam/PICTURE_381.png', 'correctAns': 'fresa'},
      {'image': 'REPSWITCH1_Fam/PICTURE_411.png', 'correctAns': 'puño'},
      {'image': 'REPSWITCH1_Fam/PICTURE_48.png', 'correctAns': 'bombero'},
      {'image': 'REPSWITCH1_Fam/PICTURE_487.png', 'correctAns': 'cesta'},
      {'image': 'REPSWITCH1_Fam/PICTURE_517.png', 'correctAns': 'cuerda'}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
    Routine ITI
    Routine famPhase
    Routine blank500
  LoopTerminator famTrials
  Routine blank500
  Routine InstructionsPractice
  Routine blank500
  LoopInitiator trialsPractice loopType="TrialHandler"
    conditionsFile = repswitch_practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1_Practice/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT'},
      {'image': 'REPSWITCH1_Practice/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'repeat', 'sequence': 2, 'target': 'T'},
      {'image': 'REPSWITCH1_Practice/PICTURE_599.png', 'correctAns': 'nube', 'respModal': 'type', 'frameColor': 'blue', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F'},
      {'image': 'REPSWITCH1_Practice/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT'},
      {'image': 'REPSWITCH1_Practice/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'repeat', 'sequence': 1, 'target': 'T'},
      {'image': 'REPSWITCH1_Practice/PICTURE_570.png', 'correctAns': 'toro', 'respModal': 'type', 'frameColor': 'blue', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F'},
      {'image': 'REPSWITCH1_Practice/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'nontarget', 'sequence': 1, 'target': 'NT'},
      {'image': 'REPSWITCH1_Practice/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'type', 'frameColor': 'blue', 'repSwitch': 'switch', 'sequence': 2, 'target': 'T'}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
    Routine ITI
    Routine practiceTrial
    Routine blank500
  LoopTerminator trialsPractice
  Routine blank500
  Routine InstructionsMain
  Routine blank500
  LoopInitiator trialsREPSWITCH loopType="TrialHandler"
    conditionsFile = repswitch.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1/PICTURE_128.png', 'correctAns': 'muñeca', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT', 'set': 1, 'stimulus': 'Stim1_Set1'},
      {'image': 'REPSWITCH1/PICTURE_128.png', 'correctAns': 'muñeca', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'repeat', 'sequence': 2, 'target': 'T', 'set': 1, 'stimulus': 'Stim1_Set1'},
      {'image': 'REPSWITCH1/PICTURE_354.png', 'correctAns': 'cabra', 'respModal': 'type', 'frameColour': 'blue', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F', 'set': 1, 'stimulus': 'Stim1_Set4'},
      {'image': 'REPSWITCH1/PICTURE_142.png', 'correctAns': 'vaso', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT', 'set': 1, 'stimulus': 'Stim2_Set1'},
      {'image': 'REPSWITCH1/PICTURE_142.png', 'correctAns': 'vaso', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'repeat', 'sequence': 2, 'target': 'T', 'set': 1, 'stimulus': 'Stim2_Set1'},
      {'image': 'REPSWITCH1/PICTURE_377.png', 'correctAns': 'babero', 'respModal': 'type', 'frameColour': 'blue', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F', 'set': 1, 'stimulus': 'Stim2_Set4'},
      {'image': 'REPSWITCH1/PICTURE_152.png', 'correctAns': 'caracol', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT', 'set': 1, 'stimulus': 'Stim3_Set1'}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
    Routine ITI
    Routine trial
    Routine blank500
  LoopTerminator trialsREPSWITCH
  Routine blank500
  Routine Debrief
  Routine Goodbye
