PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = REPSWITCH_1_Fam
  keyboardBackend = ioHub
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Routines
  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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  Routine InstructionsFam
    TextComponent textInstrFam
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will see different images on the screen. You will see one image at a time. Each image will stay on screen for a few seconds.

        You will have to name what you see in each image. After each image, you will see the written word for what you saw in that image.
        The goal of this experiment is for you to name each image with the correct word.


        Press SPACE to begin!
    KeyboardComponent keyInstrFam
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine famPhase
    PolygonComponent polygonWhiteFam
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    ImageComponent imageFam
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    TextComponent textFam
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 2.5
      text [set every frame] = $correctAns
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    MicrophoneComponent micFam
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine WelcomeFam
    TextComponent textWelcomeFam
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the experiment!
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  Routine EndFam
    TextComponent textEndFam
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Congratulations!

        You finished the first part and you can now move to the second part of the experiment!

        Press SPACE to end this part.
Flow
  Routine WelcomeFam
  Routine blank500
  Routine InstructionsFam
  Routine blank500
  LoopInitiator famTrials loopType="TrialHandler"
    conditionsFile = D:/GitHub/experiment1/repswitch_fam.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1_Fam/PICTURE_128.png', 'correctAns': 'muñeca'},
      {'image': 'REPSWITCH1_Fam/PICTURE_142.png', 'correctAns': 'vaso'},
      {'image': 'REPSWITCH1_Fam/PICTURE_152.png', 'correctAns': 'caracol'},
      {'image': 'REPSWITCH1_Fam/PICTURE_16.png', 'correctAns': 'cazador'},
      {'image': 'REPSWITCH1_Fam/PICTURE_175.png', 'correctAns': 'pintor'},
      {'image': 'REPSWITCH1_Fam/PICTURE_178.png', 'correctAns': 'puente'},
      {'image': 'REPSWITCH1_Fam/PICTURE_19.png', 'correctAns': 'pavo'},
      {'image': 'REPSWITCH1_Fam/PICTURE_235.png', 'correctAns': 'aguja'},
      {'image': 'REPSWITCH1_Fam/PICTURE_242.png', 'correctAns': 'cartero'},
      {'image': 'REPSWITCH1_Fam/PICTURE_264.png', 'correctAns': 'mano'},
      {'image': 'REPSWITCH1_Fam/PICTURE_271.png', 'correctAns': 'conejo'},
      {'image': 'REPSWITCH1_Fam/PICTURE_30.png', 'correctAns': 'granja'},
      {'image': 'REPSWITCH1_Fam/PICTURE_319.png', 'correctAns': 'vaca'},
      {'image': 'REPSWITCH1_Fam/PICTURE_320.png', 'correctAns': 'iglesia'},
      {'image': 'REPSWITCH1_Fam/PICTURE_381.png', 'correctAns': 'fresa'},
      {'image': 'REPSWITCH1_Fam/PICTURE_48.png', 'correctAns': 'bombero'},
      {'image': 'REPSWITCH1_Fam/PICTURE_517.png', 'correctAns': 'cuerda'},
      {'image': 'REPSWITCH1_Fam/PICTURE_552.png', 'correctAns': 'manzana'},
      {'image': 'REPSWITCH1_Fam/PICTURE_576.png', 'correctAns': 'guante'},
      {'image': 'REPSWITCH1_Fam/PICTURE_610.png', 'correctAns': 'miel'},
      {'image': 'REPSWITCH1_Fam/PICTURE_636.png', 'correctAns': 'oveja'},
      {'image': 'REPSWITCH1_Fam/PICTURE_687.png', 'correctAns': 'camisa'}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
    Routine ITI
    Routine famPhase
    Routine blank500
  LoopTerminator famTrials
  Routine blank500
  Routine EndFam
