PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = REPSWITCH_1_Practice
  keyboardBackend = ioHub
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Routines
  Routine InstructionsPractice
    TextComponent textInstrPractice
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This is a practice session!
        You will see images on the screen, one at a time, and you will have to name what you see in each image.  You will have to name either by speaking or by typing.

        A blue or yellow rectangle will be placed behind every image to indicate whether you need to speak or type.

        If the rectangle is blue, you will need to type the name of what you see on the image. If the rectangle is yellow, you will have to speak.

        You should name the images correctly and as quickly as possible. The images will stay on the screen for a short time.

        It is important that when you type you avoid looking at your hands as much as possible!

        You should also keep your hands above the keyboard during the whole practice session!

        Please, try not to speak while typing!


        Press SPACE to begin!
    KeyboardComponent keyInstrPractice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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  Routine practiceTrial
    PolygonComponent polygonCol
      fillColor [set every repeat] = $frameColor
      lineColor [set every repeat] = $frameColor
      shape = rectangle
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonWh
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imagePractice
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textCue
      color [set every repeat] = $frameColor
      letterHeight = 0.05
      pos = (-1,-1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respModal
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    PolygonComponent polygonText
      fillColor = 0.9216, 0.9216, 0.9216
      lineColor = 0.9216, 0.9216, 0.9216
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textPractice
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respDisplay
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    KeyboardComponent keyPractice
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','ñ','o','p','q','r','s','t','u','v','w','x','y','z','backspace'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    CodeComponent codePractice
      Code Type = Py
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      Begin Routine:
        respDisplay = ""


        #key logger defaults
        last_len = 0
        key_list = []

        polygonText.opacity = 0
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyPractice.keys) > last_len):
            #increment the key logger length
            last_len = len(keyPractice.keys)

            #grab the last key added to the keys list
            key_list.append(keyPractice.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            #elif("return" in key_list):
                #remove the enter key
                #key_list.pop()

                #and end the trial if we have at least 2 digits
                #if(len(key_list) >= 2):
                    #continueRoutine = False


            #now loop through and remove any extra characters that may exist
            #while(len(key_list) > maxDigits):
                #key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)

        # check if the participant has started typing for the box to appear behind the sentence
        if len(key_list) > 0:
            polygonText.opacity = 1
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    MicrophoneComponent micPractice
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    CodeComponent codeSpeak
      Code Type = Py
      Begin Experiment:
        from datetime import date

        # Get the participant number from the experiment info dialog
        participant_number = expInfo['participant']

        # Get the current date
        current_date = date.today().strftime("%Y-%m-%d")

        # Define a placeholder filename
        filename = ""

        # Define and initialise trialN
        trialN = 0
      Begin Routine:
        import sounddevice as sd
        import soundfile as sf
        import os

        output_dir = "D:/GitHub/experiment1/data"  # Set the desired directory to save the audio files

        # Increment trialN for each new routine
        trialN += 1

        # Define the filename based on participant number and date
        filename = f"response_p{participant_number}_{current_date}_trial{str(trialN)}.wav"

        def save_audio(response):
            sf.write(os.path.join(output_dir, filename), response, samplerate)

        # Set the sampling rate of the microphone response component
        samplerate = int(sd.query_devices(None, 'input')['default_samplerate'])

        # Set the callback function to save audio during the experiment
        def audio_callback(indata, frames, time, status):
            if status:
                print(status)
            save_audio(indata)

        # Initialize the microphone and start recording
        mic = sd.InputStream(callback=audio_callback, channels=1, samplerate=samplerate)
        mic.start()
      End Routine:
        # Stop recording when the routine ends
        mic.stop()
        mic.close()
  Routine WelcomePractice
    TextComponent textWelcomePractice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the second part of the experiment!
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  Routine EndPractice
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Great!

        You finished the second part of the experiment!

        You can now move to the third and last part of this experiment!

        Press SPACE to end this part.
  Routine InstructionsPractice_2
Flow
  Routine WelcomePractice
  Routine blank500
  Routine InstructionsPractice
  Routine blank500
  LoopInitiator trialsPractice loopType="TrialHandler"
    conditionsFile = repswitch_practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1_Practice/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'speak', 'frameColor': 'yellow', 'modalSymb': 'REPSWITCH1_Practice/lips.png', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT'},
      {'image': 'REPSWITCH1_Practice/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'speak', 'frameColor': 'yellow', 'modalSymb': 'REPSWITCH1_Practice/lips.png', 'repSwitch': 'repeat', 'sequence': 2, 'target': 'T'},
      {'image': 'REPSWITCH1_Practice/PICTURE_599.png', 'correctAns': 'nube', 'respModal': 'type', 'frameColor': 'blue', 'modalSymb': 'REPSWITCH1_Practice/keyboard.png', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F'},
      {'image': 'REPSWITCH1_Practice/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'speak', 'frameColor': 'yellow', 'modalSymb': 'REPSWITCH1_Practice/lips.png', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT'},
      {'image': 'REPSWITCH1_Practice/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'speak', 'frameColor': 'yellow', 'modalSymb': 'REPSWITCH1_Practice/lips.png', 'repSwitch': 'repeat', 'sequence': 1, 'target': 'T'},
      {'image': 'REPSWITCH1_Practice/PICTURE_570.png', 'correctAns': 'toro', 'respModal': 'type', 'frameColor': 'blue', 'modalSymb': 'REPSWITCH1_Practice/keyboard.png', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F'}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
    Routine ITI
    Routine practiceTrial
    Routine blank500
  LoopTerminator trialsPractice
  Routine blank500
  Routine EndPractice
